PsychoPy2experiment version="2024.1.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Orientation
  keyboardBackend = ioHub
  logging level = warning
  runMode = 0
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Routines
  Routine trial
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  Routine Welcome_Scree
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    TextComponent textWelcomeMessage
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = Welcome to the Experiment
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    TextComponent textWelcomeContinuos
      letterHeight = 0.05
      startVal [time (s)] = 2
      stopVal [duration (s)] = 50
      text = The experiment is about to start is that okay
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    CodeComponent code_2
      Code Type = Py
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      Begin Experiment:
        #Import Netstation library
        from egi_pynetstation.NetStation import NetStation

        #IP address of NetStation - CHANGE THIS TO MATCH THE IP ADDRESS OF YOUR NETSTATION
        IP_ns = '10.10.10.42'

        #IP address of amplifier (if using 300
        #series, this is the same as the IP address of
        #NetStation. If using newer series, the amplifier
        #has its own IP address)
        IP_amp = '10.10.10.51'

        #Port configured for ECI in NetStation - CHANGE THIS IF NEEDED
        port_ns = 55513

        #Start recording and send trigger to show this
        eci_client = NetStation(IP_ns, port_ns)
        eci_client.connect(ntp_ip = IP_amp)
        eci_client.begin_rec()
        eci_client.send_event(event_type = 'STRT', start = 0.0)
      Begin Routine:
        triggerSent = False
      Each Frame:
        #Send trigger to NetStation - Change 'stim' to
        #a meaningful trigger for your experiment OF NO MORE THAN FOUR CHARACTERS. You can
        #also set the trigger in a conditions file.

        if stimulus.status == STARTED and not triggerSent: #If the stimulus component has started and the trigger has not yet been sent. Change 'stimulus' to match the name of the component you want the trigger to be sent at the same time as
            win.callOnFlip(eci_client.send_event, event_type = 'stim', label='stim') #Send the trigger, synced to the screen refresh
            triggerSent = True #The trigger has now been sent, so we set this to true to avoid a trigger being sent on each frame
      End Experiment:
        #Stop recording and disconnect
        eci_client.end_rec()
        eci_client.disconnect()
  Routine Good_Bye
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Flow
  Routine Welcome_Scree
  Routine trial
  Routine trial
  Routine trial
  Routine Good_Bye
